#pragma rtGlobals=3		// Use modern global access method and strict wave access.
#pragma version = 0.12
#pragma IgorVersion = 6.3
#pragma ModuleName=AtomView
#include "Elements", version>=1.72
#include "GizmoZoomTranslate", version>=1.37
#include "LatticeSym", version>=3.78
#requiredPackages "LatticeSym;"
#initFunctionName "Init_AtomView()"

// These Constant values can be OverRidden by adding the line in your Main Procedure window.  Don't change this file.
Constant AtomView_GrayBkg = 0.75	// Can OverRide with :OverRide Constant AtomView_GrayBkg=0.95
Constant AtomView_BondLineWidth = 5	// Can OverRide with :OverRide Constant AtomView_BondLineWidth=3
Constant AtomView_UseCovalent = 0	// Can OverRide with :OverRide Constant AtomView_UseCovalent=1
												// turn this flag on to use covalent radius instead of atomic radius.
Constant AtomView_SphereQuality = 50	// Can OverRide with :OverRide Constant AtomView_SphereQuality=100
Constant AtomView_UseBlend = -1		// Can OverRide with :OverRide Constant AtomView_UseBlend=1, 0=NoBlend, 1=Blend, -1=Auto
Constant AtomView_zero= 1e-10		// distances less than this (=1e-19 m) are considered zero


//Static Constant GizmoScaleSize_BASE=7.5
Static Constant GizmoScaleSize_BASE=3.75

Menu "Analysis"
	SubMenu "Lattice"
		"-"
		"Make Cells of Atoms...",MakeCellsOfLattice(NaN,NaN,NaN)
		"Gizmo of Atoms",MakeAtomViewGizmo($"")
		"Atom Type at Cursor",print AtomView#ShowAtomViewInfo(1)
	End
End


Static Function AfterFileOpenHook(refNum,file,pathName,type,creator,kind)
	Variable refNum, kind
	String file,pathName,type,creator
	if ((kind==1) || (kind==2))		// an experiment (packed or unpacked)
		Init_AtomView()
	endif
End
Static Function IgorStartOrNewHook(IgorApplicationNameStr)
	String IgorApplicationNameStr
	Init_AtomView()
End




Static Function/T ShowAtomViewInfo(alert)
	Variable alert
	alert = !(!alert)

	String panelWin="GizmoScatterMarkerPanel"

	if (strlen(WinList(panelWin,"", "WIN:64 " ))<1)
		return ""
	endif

	ControlInfo/W=$panelWin waveSelectPopup
	if (abs(V_flag)!=3)
		return ""
	endif
	Wave xyz=$S_Value
	if (!WaveExists(xyz))
		return ""
	endif

	ControlInfo/W=$panelWin alongWave
	if (abs(V_flag)!=5)
		return ""
	endif
	Variable pnt = round(V_Value)
	if (numtype(pnt) || pnt<0 || pnt>=DimSize(xyz,0))
		return ""
	endif

	String wNote=note(xyz)
	Wave Zwave = $StringByKey("ZWave",wNote,"=")
	Wave/T AtomTypewave = $StringByKey("atomAtomTypeWave",wNote,"=")
	if (!WaveExists(Zwave) || !WaveExists(AtomTypewave))
		return ""
	endif
	Variable Z=round(Zwave[pnt])
	String type=AtomTypewave[pnt]
	Variable bondLenMax = NumberByKey("bondLenMax",wNote,"=")

	String str
	sprintf str, "atom#%d,   %s [Z=%g]\rbond max = %g nm",pnt,type,Z,bondLenMax

	if (alert)
		DoAlert 0,str
	endif
	return str
End



Function/WAVE MakeCellsOfLattice(Na,Nb,Nc,[blen,GizmoScaleSize])
	Variable Na,Nb,Nc				// number of cells in each direction, default is 1
	Variable bLen					// maximum distance that gets a bond
	Variable GizmoScaleSize	// 1 gives nice pictures
	bLen = ParamIsDefault(bLen) ? NaN : bLen
	bLen = bLen>0 ? bLen : NaN
	GizmoScaleSize = ParamIsDefault(GizmoScaleSize) ? 1 : GizmoScaleSize
	GizmoScaleSize = numtype(GizmoScaleSize) || GizmoScaleSize<=0 ? 1 : GizmoScaleSize

	STRUCT crystalStructure xtal
	if (FillCrystalStructDefault(xtal))					//fill the lattice structure with test values
		DoAlert 0, "no crystal structure found"
		return $""
	endif

	if (numtype(Na+Nb+Nc) || Na<1 || Nb<1 || Nc<1)
		Na = numtype(Na) || Na<1 ? 1 : round(Na)
		Nb = numtype(Nb) || Nb<1 ? 1 : round(Nb)
		Nc = numtype(Nc) || Nc<1 ? 1 : round(Nc)
		Prompt Na,"Number of Cells along a"
		Prompt Nb,"Number of Cells along b"
		Prompt Nc,"Number of Cells along c"
		Prompt blen,"Maximum bond length (nm)"
		Prompt GizmoScaleSize,"Gizmo Atom Scale Size (>0)"
		if (xtal.Nbonds >= 1)
			DoPrompt "Cells to Make",Na,Nb,Nc,GizmoScaleSize
		else
			DoPrompt "Cells to Make",Na,Nb,Nc,blen,GizmoScaleSize
		endif
		if (V_flag)
			return $""
		endif
		printf "MakeCellsOfLattice(%g, %g, %g",Na,Nb,Nc
		if (numtype(blen)==0 || !ParamIsDefault(blen))
			printf ", blen=%g",blen
		endif
		if (!ParamIsDefault(GizmoScaleSize) || GizmoScaleSize!=1)
			printf ", GizmoScaleSize=%g",GizmoScaleSize
		endif
		printf ")\r"
	endif
	Na = round(Na)
	Nb = round(Nb)
	Nc = round(Nc)
	GizmoScaleSize = numtype(GizmoScaleSize) || GizmoScaleSize<=0 ? 1 : GizmoScaleSize
	if (!(Na>0 && Nb>0 && Nc>0 && numtype(Na+Nb+Nc)==0))
		return $""
	endif

	Wave xyz=MakeOneCellsAtoms(xtal,Na,Nb,Nc,blen=blen,GizmoScaleSize=GizmoScaleSize)

	if (strlen(GetRTStackInfo(2))<1)
		String wNote=note(xyz)
		String prefix=StringByKey("prefix",wNote,"=")
		String sourceFldr=StringByKey("sourceFldr",wNote,"=")
		String desc=StringByKey("desc",wNote,"=")
		printf "Created atoms for '%s'  in '%s'\r",desc,sourceFldr
		Variable Nbonds=NumberByKey("Nbonds",note(xyz),"=")
		Variable bondLenMax=NumberByKey("bondLenMax",wNote,"=")
		if (!(Nbonds>0))
			printf "  prefix = '%s',  NO bonds were created\r",prefix
		elseif (bondLenMax > 0)
			printf "  prefix = '%s',  using max bond length = %g nm,  made %g bonds\r",prefix,bondLenMax,Nbonds
		else
			printf "  prefix = '%s',  %g bonds (using given bond lengths)\r",prefix,Nbonds
		endif
	endif
	MakeAtomViewGizmo(xyz)
	return xyz
End


Function/WAVE MakeOneCellsAtoms(xtal,Na,Nb,Nc,[blen,GizmoScaleSize])
	STRUCT crystalStructure &xtal
	Variable Na,Nb,Nc				// number of cells in each direction, default is 1
	Variable bLen					// maximum distance that gets a bond
	Variable GizmoScaleSize	// 1 gives nice pictures
	Na = numtype(Na) || Na<1 ? 1 : round(Na)
	Nb = numtype(Nb) || Nb<1 ? 1 : round(Nb)
	Nc = numtype(Nc) || Nc<1 ? 1 : round(Nc)
	bLen = ParamIsDefault(bLen) ? NaN : bLen
	bLen = bLen>0 ? bLen : NaN
	GizmoScaleSize = ParamIsDefault(GizmoScaleSize) ? 1 : GizmoScaleSize
	GizmoScaleSize = numtype(GizmoScaleSize) || GizmoScaleSize<=0 ? 1 : GizmoScaleSize

	Variable xtalN = xtal.N
	if (xtalN<1)
		return $""
	endif

	Make/N=(3,3)/D/FREE direct
	direct[0][0] = xtal.a0;		direct[0][1] = xtal.b0;		direct[0][2] = xtal.c0
	direct[1][0] = xtal.a1;		direct[1][1] = xtal.b1;		direct[1][2] = xtal.c1
	direct[2][0] = xtal.a2;		direct[2][1] = xtal.b2;		direct[2][2] = xtal.c2
	Make/N=3/D/FREE Ns={Na,Nb,Nc}
	MatrixOp/FREE/O maxSize0 = maxVal(abs((direct x Ns)))		// find biggest size
	Variable maxSize=maxSize0[0]

	String fldrSav= GetDataFolder(1)
	String atomFldr = "root:Packages:Lattices:"	// location of generic atom positions
	String desc = xtal.desc
	String prefix=CleanupName(desc[0,16],0)			// only keep the first 17 characters
	for (;strsearch(prefix,"__",0)>=0;)
		prefix = ReplaceString("__",prefix,"_")		// change multiple underscores to singles
	endfor
	Variable i=strsearch(prefix,"_",Inf,1)			// also, trim off a trailing underscore
	i = i>0 && i==strlen(prefix)-1 ? i-1 : strlen(prefix)-1
	prefix = prefix[0,i]
	String fldr = GetDataFolder(1)+prefix+"_AtomView"
	if (!stringmatch(GetDataFolder(0),prefix+"_AtomView"))		// not already in fldr
		NewDataFolder/O/S $fldr
	endif
	reMakeAtomXYZs(xtal)									// ensure that atom positions are current

	Variable Nmax=200
	Make/N=(Nmax,3)/O $(prefix+"_XYZ")/WAVE=xyz = NaN
	Make/N=(Nmax,3)/O $(prefix+"_Size")/WAVE=size = 1
	Make/N=(Nmax,4)/O $(prefix+"_RGBA")/WAVE=rgba = 0
	Make/N=(Nmax)/O $(prefix+"_Z")/WAVE=zw = NaN
	Make/N=(Nmax)/O $(prefix+"_Occupy")/WAVE=occw = NaN
	Make/N=(Nmax)/O/T $(prefix+"_Type")/WAVE=types = ""

	Make/N=4/FREE rgbai
	String wNote="", atomType
	Variable rad, m, Zatom, occupy, Natom, Ni
	for (Natom=0,m=0; m<xtalN; m+=1)					// loop over each atom type
		Wave atomi=$(atomFldr + "atom"+num2istr(m))
		if (!WaveExists(atomi))
			break
		endif
		wNote = note(atomi)
		Zatom = NumberByKey("Zatom",wNote,"=")
		Zatom = Zatom>0 ? Zatom : 1
		if (AtomView_UseCovalent)
			rad = Element_covRadius(Zatom)/10			// radius in nm (not Angstrom)
		else
			rad = Element_atomRadius(Zatom)/10
		endif
		occupy = NumberByKey("occupy",wNote,"=")
		occupy = occupy>=0 ? limit(occupy,0,1) : 1
		atomType = StringByKey("atomType",wNote,"=")
		Wave rgb = atomRGB(Zatom,1)						// returns the Jmol color for an atom
		rgbai[0,2] = rgb[p]
		rgbai[3] = occupy*0.5

		Wave xyzi = RepeatOneAtomSet(atomi,Na=Na,Nb=Nb,Nc=Nc)
		if (!WaveExists(xyzi))
			continue
		endif

		MatrixOp/FREE/O xyzi = (direct x xyzi^t)^t	// convert fractional to real distances
		Ni = DimSize(xyzi,0)
		if (Natom+Ni>=Nmax)
			Nmax += 300
			Redimension/N=(Nmax,-1) xyz, size, rgba
			Redimension/N=(Nmax) zw, types, occw
		endif
		xyz[Natom,Natom+Ni-1][] = xyzi[p-Natom][q]
		types[Natom,Natom+Ni-1] = atomType
		size[Natom,Natom+Ni-1] = 2*rad/maxSize * (GizmoScaleSize*GizmoScaleSize_BASE)
		zw[Natom,Natom+Ni-1] = Zatom
		occw[Natom,Natom+Ni-1] = occupy
		rgba[Natom,Natom+Ni-1][] = rgbai[q]
		Natom += Ni
	endfor
	Redimension/N=(Natom,-1) xyz, size, rgba
	Redimension/N=(Natom) zw, types, occw
	xyz = abs(xyz)<AtomView_zero ? 0 : xyz

	if (!(blen>0))
		Wave bonds = MakeBondList_Given(prefix,xtal,xyz)
	endif
	if (!WaveExists(bonds))
		if (!(blen>0))				// find max length to use for bonds
			blen = FindMinSeparation(xyz)*1.01
		endif
		Wave bonds = MakeBondList_blen(prefix,xyz,blen=blen)
	endif

	Wave cell = MakeCellOutline(prefix,xtal,Na=Na,Nb=Nb,Nc=Nc)
	if ((Na>1 || Nb >1 || Nc>1) && WaveExists(cell))
		Wave cell0 = MakeCellOutline(prefix,xtal,name=NameOfWave(cell)+"0")
	endif
	Wave corners = MakeGizmocubeCorners(xyz)

	SetDataFolder fldrSav

	wNote = "waveClass=atomViewXYZ;"
	wNote = ReplaceStringByKey("sourceFldr",wNote,GetWavesDataFolder(xyz,1),"=")
	wNote = ReplaceStringByKey("desc",wNote,desc,"=")
	wNote = ReplaceStringByKey("prefix",wNote,prefix,"=")
	wNote = ReplaceNumberByKey("Natom",wNote,Natom,"=")
	String str
	sprintf str,"%d %d %d",Na,Nb,Nc
	wNote = ReplaceStringByKey("Nabc",wNote,str,"=")
	if (blen>0)
		wNote = ReplaceNumberByKey("bondLenMax",wNote,blen,"=")
	endif
	wNote = ReplaceStringByKey("sizeWave",wNote,GetWavesDataFolder(size,2),"=")
	wNote = ReplaceStringByKey("rgbaWave",wNote,GetWavesDataFolder(rgba,2),"=")
	wNote = ReplaceStringByKey("ZWave",wNote,GetWavesDataFolder(zw,2),"=")
	wNote = ReplaceStringByKey("OccupyWave",wNote,GetWavesDataFolder(occw,2),"=")
	wNote = ReplaceStringByKey("atomAtomTypeWave",wNote,GetWavesDataFolder(types,2),"=")
	if (WaveExists(bonds))
		wNote = ReplaceStringByKey("bondsWave",wNote,GetWavesDataFolder(bonds,2),"=")
		Variable Nbonds=NumberByKey("Nbonds",note(bonds),"=")
		if (Nbonds>0)
			wNote = ReplaceNumberByKey("Nbonds",wNote,Nbonds,"=")
		endif
	endif
	if (WaveExists(corners))
		wNote = ReplaceStringByKey("cornersWave",wNote,GetWavesDataFolder(corners,2),"=")
	endif
	if (WaveExists(cell))
		wNote = ReplaceStringByKey("cellOutlineWave",wNote,GetWavesDataFolder(cell,2),"=")
		if (WaveExists(cell0))
			wNote = ReplaceStringByKey("cellOutlineWave0",wNote,GetWavesDataFolder(cell0,2),"=")
		endif
	endif
	Note/K xyz, wNote

	wNote = ReplaceStringByKey("source","waveClass=;",GetWavesDataFolder(xyz,2),"=")
	Note/K size, ReplaceStringByKey("waveClass",wNote,"atomViewSize","=")
	Note/K types, ReplaceStringByKey("waveClass",wNote,"atomViewAtomType","=")
	Note/K zw, ReplaceStringByKey("waveClass",wNote,"atomViewZ","=")
	Note/K occw, ReplaceStringByKey("waveClass",wNote,"atomViewOccupy","=")
	Note/K rgba, ReplaceStringByKey("waveClass",wNote,"atomViewRGBA","=")
	return xyz
End


Static Function/WAVE RepeatOneAtomSet(atomi,[Na,Nb,Nc])
	Wave atomi						// these are RELATIVE coordinates, assumed in range [0,1)
	Variable Na,Nb,Nc				// number of cells in each direction, default is 1
	Na = ParamIsDefault(Na) ? 1 : Na
	Nb = ParamIsDefault(Nb) ? 1 : Nb
	Nc = ParamIsDefault(Nc) ? 1 : Nc
	Na = numtype(Na) || Na<1 ? 1 : round(Na)
	Nb = numtype(Nb) || Nb<1 ? 1 : round(Nb)
	Nc = numtype(Nc) || Nc<1 ? 1 : round(Nc)

	Variable Ni=DimSize(atomi,0)
	if (Ni<1)
		return $""
	endif

	Variable Nmax=300, N
	Make/N=(Nmax,3)/FREE/D vecs

	Make/N=3/D/FREE ahat={1,0,0}, bhat={0,1,0}, chat={0,0,1}, v
	Variable ia,ib,ic, i
	for (N=0,ic=0; ic<=Nc; ic+=1)
		for (ib=0; ib<=Nb; ib+=1)
			for (ia=0; ia<=Na; ia+=1)
				for (i=0;i<Ni;i+=1)	// loop over each atom in atomi
					v = atomi[i][p] + ia*ahat[p] + ib*bhat[p] + ic*chat[p]
					if (v[0]<=Na && v[1]<=Nb && v[2]<=Nc)	// keep this atom
						if (N>=Nmax)
							Nmax += 300
							Redimension/N=(Nmax,-1) vecs
						endif
						vecs[N][] = v[q]
						N += 1
					endif
				endfor
			endfor
		endfor
	endfor
	Redimension/N=(N,-1) vecs
	return vecs
End


Static Function/WAVE MakeCellOutline(prefix,xtal,[Na,Nb,Nc,name])	// makes a gizmo path wave that outlines conventional cell
	String prefix
	STRUCT crystalStructure &xtal
	Variable Na,Nb,Nc					// number of cells in each direction
	String name							// name of wave to make
	Na = ParamIsDefault(Na) ? 1 : Na
	Nb = ParamIsDefault(Nb) ? 1 : Nb
	Nc = ParamIsDefault(Nc) ? 1 : Nc
	Na = numtype(Na) || Na<1 ? 1 : round(Na)
	Nb = numtype(Nb) || Nb<1 ? 1 : round(Nb)
	Nc = numtype(Nc) || Nc<1 ? 1 : round(Nc)
	name = SelectString(ParamIsDefault(name),name,"")

	Make/N=3/FREE/D a,b,c			// the lattice vectors
	a = {xtal.a0, xtal.a1, xtal.a2}
	b = {xtal.b0, xtal.b1, xtal.b2}
	c = {xtal.c0, xtal.c1, xtal.c2}

	name = SelectString(strlen(name),prefix+"_CellOutline",name)
	Make/N=(23,3)/D/O $name/WAVE=cell = NaN

	cell[0][] = 0							// form the a-b base
	cell[1][] = Na*a[q]
	cell[2][] = Na*a[q] + Nb*b[q]
	cell[3][] = Nb*b[q]
	cell[4][] = 0
	cell[5][] = NaN

	cell[6][] = 0							// the 4 connectors between c=0 and c=1 planes
	cell[7][] = Nc*c[q]					// from 000
	cell[8][] = NaN

	cell[9][] = Na*a[q]					// from a
	cell[10][] = Na*a[q] + Nc*c[q]
	cell[11][] = NaN

	cell[12][] = Nb*b[q]				// from b
	cell[13][] = Nb*b[q] + Nc*c[q]
	cell[14][] = NaN

	cell[15][] = Na*a[q] +Nb*b[q]	// from a-b corner
	cell[16][] = Na*a[q] + Nb*b[q] + Nc*c[q]
	cell[17][] = NaN

	cell[18][] = Nc*c[q]				// form the a-b at c
	cell[19][] = Na*a[q] + Nc*c[q]
	cell[20][] = Na*a[q] + Nb*b[q] + Nc*c[q]
	cell[21][] = Nb*b[q] + Nc*c[q]
	cell[22][] = Nc*c[q]

	cell = abs(cell)<AtomView_zero ? 0 : cell

	String wNote = ReplaceStringByKey("prefix","waveClass=atomViewCellOutline;",prefix,"=")
	Note/K cell, wNote

	return cell
End


Static Function/WAVE MakeBondList_Given(prefix,xtal,xyz)	// This makes the bond list from given bond lengths
	String prefix
	STRUCT crystalStructure &xtal
	Wave xyz				// list of atom xyz positions

	if (!WaveExists(xyz))
		return $""
	elseif (DimSize(xyz,0)<2 || DimSize(xyz,1)<3)
		return $""
	elseif (xtal.Nbonds < 1)
		return $""
	endif
	Variable N=DimSize(xyz,0), Ntypes=(xtal.Nbonds)

	String name = GetWavesDataFolder(xyz,1)+prefix+"_Type"
	Wave/T types = $name
	if (!WaveExists(types))
		return $""
	endif

	name = GetWavesDataFolder(xyz,1)+prefix+"_Bonds"
	Variable Nmax=300, Nbonds=0
	Make/N=(Nmax,3)/O $name/WAVE=bonds = NaN
	name += "_Source"
	Make/N=(Nmax)/O $name/WAVE=bsource = NaN

	String wNote="waveClass=atomViewBonds;"
	wNote = ReplaceStringByKey("source",wNote,GetWavesDataFolder(xyz,2),"=")
	wNote = ReplaceStringByKey("prefix",wNote,prefix,"=")

	String type, n0,n1
	Make/N=3/D/FREE xyz0, dxyz

	Variable i,j, m, mswap, blenMax, Nb, len
	for (Nb=0,m=0; m<Ntypes; m+=1)			// loop over each defined bond type
		n0 = xtal.bond[m].label0
		n1 = xtal.bond[m].label1
		Make/N=(xtal.bond[m].N)/FREE/D blens
		blens = xtal.bond[m].len[p]
		blens = numtype(blens) ? -Inf : blens[p]
		blenMax = WaveMax(blens)*1.05		// the largest valid distance, use 5% over
		for (mswap=0;mswap<2;mswap+=1)
			for (j=0;j<(N-1);j+=1)
				xyz0 = xyz[j][p]
				type = types[j]
				if (!stringmatch(n0,type))
					continue							// first type does not match, skip
				endif
				for (i=j+1;i<N;i+=1)
					if (!stringmatch(n1,types[i]))
						continue						// second type does not match, skip
					endif
					dxyz = xyz0[p] - xyz[i][p]
					len = norm(dxyz)
					if (AtomView_zero<len && len<=blenMax)	// found a bond
						if ((Nb+3)>=Nmax)			// need more room
							Nmax += 300	
							Redimension/N=(Nmax,-1) bonds, bsource
						endif
						bonds[Nb+0][] = xyz0[q]
						bonds[Nb+1][] = xyz[i][q]
						bonds[Nb+2][] = NaN
						bsource[Nb+0] = j
						bsource[Nb+1] = i
						bsource[Nb+2] = NaN
						Nb += 3
						Nbonds += 1
					endif
				endfor
			endfor

			if (stringmatch(n0,n1))			// same atoms, don't repeat
				mswap +=1
			else
				n1 = xtal.bond[m].label0		// swap and try again
				n0 = xtal.bond[m].label1
			endif
		endfor
	endfor

	if (Nb<1)
		Redimension/N=(0,-1) bonds, bsource
		KillWaves/Z bonds, bsource
		return $""
	endif

	Redimension/N=(Nb-1,-1) bonds, bsource
	bonds = abs(bonds)<AtomView_zero ? 0 : bonds
	wNote = ReplaceNumberByKey("Nbonds",wNote,Nbonds,"=")
	Note/K bonds, wNote
	Note/K bsource, ReplaceStringByKey("waveClass",wNote,"atomViewBonds_Source","=")
	return bonds
End


Static Function/WAVE MakeBondList_blen(prefix,xyz,[bLen])	// This is a guess when no bonds are given
	String prefix
	Wave xyz				// list of atom xyz positions
	Variable bLen		// maximum distance that gets a bond
	bLen = ParamIsDefault(bLen) ? NaN : bLen
	bLen = bLen>0 ? bLen : NaN

	if (!WaveExists(xyz))
		return $""
	elseif (DimSize(xyz,0)<2 || DimSize(xyz,1)<3)
		return $""
	endif
	if (!(blen>0))				// find max length to use for bonds
		blen = FindMinSeparation(xyz)*1.01
	endif
	Variable N=DimSize(xyz,0)

	String name = GetWavesDataFolder(xyz,1)+prefix+"_Bonds"
	Variable Nmax=300, Nbonds=0
	Make/N=(Nmax,3)/O $name/WAVE=bonds = NaN
	name += "_Source"
	Make/N=(Nmax)/O $name/WAVE=bsource = NaN

	String wNote="waveClass=atomViewBonds;"
	wNote = ReplaceStringByKey("source",wNote,GetWavesDataFolder(xyz,2),"=")
	wNote = ReplaceStringByKey("prefix",wNote,prefix,"=")
	wNote = ReplaceNumberByKey("bondLenMax",wNote,blen,"=")

	Make/N=3/D/FREE xyz0, dxyz
	Variable i,j, Nb, len
	for (Nb=0,j=0; j<(N-1); j+=1)
		xyz0 = xyz[j][p]

		for (i=j+1;i<N;i+=1)
			dxyz = xyz0[p] - xyz[i][p]
			len = norm(dxyz)
			if (AtomView_zero<len && len<=blen)	// found a bond
				if ((Nb+3)>=Nmax)				// need more room
					Nmax += 300	
					Redimension/N=(Nmax,-1) bonds, bsource
				endif
				bonds[Nb+0][] = xyz0[q]
				bonds[Nb+1][] = xyz[i][q]
				bonds[Nb+2][] = NaN
				bsource[Nb+0] = j
				bsource[Nb+1] = i
				bsource[Nb+2] = NaN
				Nb += 3
				Nbonds += 1
			endif
		endfor
	endfor

	if (Nb<1)
		Redimension/N=(0,-1) bonds, bsource
		KillWaves/Z bonds, bsource
		return $""
	endif

	Redimension/N=(Nb-1,-1) bonds, bsource
	bonds = abs(bonds)<AtomView_zero ? 0 : bonds
	wNote = ReplaceNumberByKey("Nbonds",wNote,Nbonds,"=")
	Note/K bonds, wNote
	Note/K bsource, ReplaceStringByKey("waveClass",wNote,"atomViewBonds_Source","=")
	return bonds
End
//	Function test_MakeBondList_blen()
//		Wave xyz=Si_XYZ
//		Wave wb = MakeBondList_blen("Si",xyz)
//	
//		print "wave name =",NameOfWave(wb)
//	End


Static Function/WAVE atomRGB(Z,maxVal)		// returns the Jmol color for an atom
	Variable Z					// atomic number
	Variable maxVal			// max value for a color, the saturated value
	if (!(Z>=1 && Z<=109))
		return $""
	endif
	maxVal = numtype(maxVal)||maxVal<=0 ? 1 : maxVal
	String rgbs = "255,255,255;217,255,255;204,128,255;194,255,0;255,181,181;144,144,144;48,80,248;255,13,13;144,224,80;179,227,245;"
	rgbs += "171,92,242;138,255,0;191,166,166;240,200,160;255,128,0;255,255,48;31,240,31;128,209,227;143,64,212;61,255,0;230,230,230;"
	rgbs += "191,194,199;166,166,171;138,153,199;156,122,199;224,102,51;240,144,160;80,208,80;200,128,51;125,128,176;194,143,143;"
	rgbs += "102,143,143;189,128,227;255,161,0;166,41,41;92,184,209;112,46,176;0,255,0;148,255,255;148,224,224;115,194,201;84,181,181;"
	rgbs += "59,158,158;36,143,143;10,125,140;0,105,133;192,192,192;255,217,143;166,117,115;102,128,128;158,99,181;212,122,0;148,0,148;"
	rgbs += "66,158,176;87,23,143;0,201,000C;112,212,255;255,255,199;217,255,199;199,255,199;163,255,199;143,255,199;97,255,199;"
	rgbs += "69,255,199;48,255,199;31,255,199;0,255,156;0,230,117;0,212,82;0,191,56;0,171,36;77,194,255;77,166,255;33,148,214;38,125,171;"
	rgbs += "38,102,150;23,84,135;208,208,224;255,209,35;184,184,208;166,84,77;87,89,97;158,79,181;171,92,0;117,79,69;66,130,150;"
	rgbs += "66,0,102;0,125,0007;112,171,250;0,186,255;0,161,255;0,143,255;0,128,255;0,107,255;84,92,242;120,92,227;138,79,227;"
	rgbs += "161,54,212;179,31,212;179,31,186;179,13,166;189,13,135;199,0,102;204,0,89;209,0,79;217,0,69;224,0,56;230,0,46;235,0,38;"

	String rgb = StringFromList(Z-1,rgbs)
	Variable r = str2num(StringFromList(0,rgb,",")) / 255 * maxVal
	Variable g = str2num(StringFromList(1,rgb,",")) / 255 * maxVal
	Variable b = str2num(StringFromList(2,rgb,",")) / 255 * maxVal
	if (numtype(r+g+b))
		return $""
	endif
	Make/N=3/FREE w={r,g,b}
	return w
End


Static Function FindMinSeparation(xyz)	// find the closest distance between two atoms (but>0)
	Wave xyz				// list of atom xyz positions

	Variable N=DimSize(xyz,0)
	Make/N=3/D/FREE xyz0						// the test position
	Variable i,iN, dmin=Inf
	for (i=0;i<(N-1);i+=1)
		xyz0 = xyz[i][p]
		iN = N-i-1
		if (iN>1)
			Make/N=(iN,3)/FREE/D xyzi
			xyzi = xyz[p+i+1][q]
			MatrixOP/FREE/O dxyz = sqrt(sumRows(magSqr(xyzi - rowRepeat(xyz0,iN))))
			dxyz = dxyz<AtomView_zero ? Inf : dxyz	// don't permit zero distances
			dmin = min(dmin,WaveMin(dxyz))
		else
			Redimension/N=3 dxyz
			dxyz = xyz0[p] - xyz[i+1][p]
			if (norm(dxyz)>AtomView_zero)
				dmin = min(dmin,norm(dxyz))
			endif
		endif
	endfor
	return dmin
End
//Function test_FindMinSeparation()
//	Make/N=(18,3)/FREE/D xyz
//	xyz[0][0]= {0,0.25,0,0.25,0.5,0.75,0.5,0.75,1,0,1,0,1,0,1,1,0.5,0.5}
//	xyz[0][1]= {0,0.25,0.5,0.75,0,0.25,0.5,0.75,0,1,1,0,0,1,1,0.5,1,0.5}
//	xyz[0][2]= {0,0.25,0.5,0.75,0.5,0.75,0,0.25,0,0,0,1,1,1,1,0.5,0.5,1}
//	xyz *= 0.54310206
//
//	Variable dmin = FindMinSeparation(xyz)
//	printf "dmin = %g\r",dmin
//End


Function/T MakeAtomViewGizmo(xyz)			// returns name of Gizmo
	Wave xyz
	if(exists("NewGizmo")!=4)			// Do nothing if the Gizmo XOP is not available.
		DoAlert 0, "Gizmo XOP must be installed"
		return ""
	endif

	Variable ilist,i
	String name=""
	if (!WaveExists(xyz))
		String list = WaveListClass("atomViewXYZ","*","DIMS:2,MINCOLS:3,MAXCOLS:3")
		ilist = ItemsInList(list)
		if (ilist==1)
			name = StringFromList(0,list)
		elseif (ilist>1)
			Prompt name,"Wave with Atom Positions",popup,list
			DoPrompt "Atom Positions",name
			if (V_flag)
				return ""
			endif
		else									// maybe check a folder?
			ilist = CountObjects(":",4)
			list = ""
			for (i=0;i<ilist;i+=1)
				name = GetIndexedObjName(":", 4,i)
				if (stringmatch(name,"*_AtomView"))
					list += name+";"
				endif
			endfor
			ilist = ItemsInList(list)
			if (iList==1)					// only one appropriate folder, use it
				name = StringFromList(0,list)
				name = ":"+name+":"+ReplaceString("_AtomView",name,"_XYZ")
			elseif (iList>1)
				Prompt name,"Folder with Atom Positions",popup,list
				DoPrompt "Atom Positions",name
				if (V_flag)
					return ""
				endif
				name = ":"+name+":"+ReplaceString("_AtomView",name,"_XYZ")
			else
				name = ""				// nothing appropriate found
			endif
		endif
		Wave xyz = $name
	endif
	if (!WaveExists(xyz))
		return ""
	endif

	String gizName = FindGizmoWithWave(xyz)		// find the Gizmo which contains the specified wave
	if (strlen(gizName))
		DoWindow/F $gizName
		return gizName
	endif

	String wNote=note(xyz)
	String prefix=StringByKey("prefix",wNote,"=")
	if (strlen(prefix)<1)
		return ""
	endif
	gizName = CleanupName("Gizmo_"+prefix,0)

	Wave size = $StringByKey("sizeWave",wNote,"=")
	Wave rgba = $StringByKey("rgbaWave",wNote,"=")
	Wave Zwave = $StringByKey("ZWave",wNote,"=")
	Wave AtomTypewave = $StringByKey("atomAtomTypeWave",wNote,"=")
	Wave bonds = $StringByKey("bondsWave",wNote,"=")
	Wave corners = $StringByKey("cornersWave",wNote,"=")
	Wave cell = $StringByKey("cellOutlineWave",wNote,"=")
	Wave cell0 = $StringByKey("cellOutlineWave0",wNote,"=")
	Variable bondLenMax = NumberByKey("bondLenMax",wNote,"=")
	String sourceFldr=StringByKey("sourceFldr",wNote,"=")
	String desc=StringByKey("desc",wNote,"=")
	Variable Na,Nb,Nc
	String title2="", title3=""
	sscanf StringByKey("Nabc",wNote,"="),"%d %d %d", Na,Nb,Nc
	if ((Na>1 || Nb>1 || Nc>1) && V_flag==3)
		sprintf title2,"%d x %d x %d cells",Na,Nb,Nc
	endif
	if (bondLenMax>0)
		sprintf title3,"max bond length = %g nm",bondLenMax
	endif

	Variable useBlend = AtomView_UseBlend			// 0=no blend, 1=blend, -1=auto
	Make/N=3/D/FREE xyz0
	Variable m, N=DimSize(xyz,0)
	for (m=0;m<N && useBlend<0;m+=1)				// search for two atoms at same position if useBlend is auto (-1)
		xyz0 = xyz[m][p]
		MatrixOP/FREE/O dxyz = greater(AtomView_zero,sumRows(magSqr(xyz-rowRepeat(xyz0,N))))
		useBlend = sum(dxyz)>=2 ? 1 : useBlend
	endfor
	useBlend = useBlend<0 ? 0 : !(!useBlend)	// if no duplicate atoms found, useBlend=0 (no blending)

	String str, objectList="", attributeList="", titleGroup=""
	Execute "NewGizmo/N="+gizName+"/T=\""+gizName+"\" /W=(234,45,992,803)"
	Execute "ModifyGizmo startRecMacro"
	titleGroup = AddGizmoTitleGroup("",desc,title2=title2,title3=title3,title4=sourceFldr)

	Variable fixedLight = 0
	if (strlen(titleGroup) && fixedLight)
		Execute "AppendToGizmo light=Directional,name=lightFixed"				// this light is fixed (just like title)
		Execute "ModifyGizmo light=lightFixed property={ position,0,0,-1,0}"
		Execute "ModifyGizmo light=lightFixed property={ direction,0,0,-1}"
		Execute "ModifyGizmo light=lightFixed property={ ambient,0.45,0.45,0.45,1}"
		Execute "ModifyGizmo light=lightFixed property={ specular,1,1,1,1.0}"
		Execute "ModifyGizmo light=lightFixed property={ diffuse,0.45,0.45,0.45,1.0}"
	endif

	objectList += "lightMoving;"
	Execute "AppendToGizmo light=Directional,name=lightMoving"						// this light is spins with the atoms
	Execute "ModifyGizmo light=lightMoving property={ position,0,0,-1,0}"
	Execute "ModifyGizmo light=lightMoving property={ direction,0,0,-1}"
	Execute "ModifyGizmo light=lightMoving property={ specular,1,1,1,1}"
//	Execute "ModifyGizmo light=lightMoving property={ diffuse,0,0,0,1}"
	Execute "ModifyGizmo light=lightMoving property={ ambient,0.866667,0.866667,0.866667,1}"
	Execute "ModifyGizmo light=lightMoving property={ diffuse,0.866667,0.866667,0.866667,1}"

	sprintf str,"AppendToGizmo sphere={0.1,%d,%d},name=generalAtom",AtomView_SphereQuality,AtomView_SphereQuality
	Execute str									// This is a generic atom, with shininess & some specular, no color or size
		Execute "AppendToGizmo attribute shininess={100,1032},name=shininessAtom0"
		Execute "AppendToGizmo attribute specular={1.0,1.0,0.8,1,1032},name=specularAtom0"
		Execute "ModifyGizmo setObjectAttribute={generalAtom,shininessAtom0}"
		Execute "ModifyGizmo setObjectAttribute={generalAtom,specularAtom0}"
		Execute "ModifyGizmo modifyObject=generalAtom,property={colorType,0}"

	objectList += "atomViewAtoms;"
	Execute "AppendToGizmo Scatter="+GetWavesDataFolder(xyz,2)+",name=atomViewAtoms"
	Execute "ModifyGizmo ModifyObject=atomViewAtoms property={ scatterColorType,1}"
	Execute "ModifyGizmo ModifyObject=atomViewAtoms property={ markerType,0}"
	Execute "ModifyGizmo ModifyObject=atomViewAtoms property={ sizeType,1}"
	Execute "ModifyGizmo ModifyObject=atomViewAtoms property={ rotationType,0}"
	Execute "ModifyGizmo ModifyObject=atomViewAtoms property={ size,0.2}"
	Execute "ModifyGizmo ModifyObject=atomViewAtoms property={ colorWave,"+GetWavesDataFolder(rgba,2)+"}"
	Execute "ModifyGizmo ModifyObject=atomViewAtoms property={ sizeWave,"+GetWavesDataFolder(size,2)+"}"
	Execute "ModifyGizmo ModifyObject=atomViewAtoms property={ Shape,7}"			// 7 means an object, set in next line
	Execute "ModifyGizmo ModifyObject=atomViewAtoms property={ objectName,generalAtom}"

	if (WaveExists(bonds))
		objectList += "atomViewBonds;"
		Variable Nbonds = NumberByKey("Nbonds",note(bonds),"=")
		Variable lineWidth = limit(2+3.9*exp(-0.0046*Nbonds),1,8)
		lineWidth = numtype(lineWidth) ? 3 : round(lineWidth*100)/100
		Execute "AppendToGizmo Path="+GetWavesDataFolder(bonds,2)+",name=atomViewBonds"
		Execute "ModifyGizmo ModifyObject=atomViewBonds property={ pathColorType,1}"
		Execute "ModifyGizmo ModifyObject=atomViewBonds property={ lineWidthType,1}"
		Execute "ModifyGizmo ModifyObject=atomViewBonds property={ lineWidth,"+num2str(lineWidth)+"}"
		Execute "ModifyGizmo ModifyObject=atomViewBonds property={ pathColor,0,0,0,1}"
			Execute "ModifyGizmo setObjectAttribute={atomViewBonds,specularBond0}"
		Execute "AppendToGizmo attribute specular={0.1,0.1,0.1,1,1032},name=specularBond0"
	endif

	if (WaveExists(cell))
		objectList += "cellOutline;"
		Execute "AppendToGizmo Path="+GetWavesDataFolder(cell,2)+",name=cellOutline"
		Execute "ModifyGizmo ModifyObject=cellOutline property={ pathColorType,1}"
		Execute "ModifyGizmo ModifyObject=cellOutline property={ lineWidthType,1}"
		Execute "ModifyGizmo ModifyObject=cellOutline property={ lineWidth,0.5}"
		Execute "ModifyGizmo ModifyObject=cellOutline property={ pathColor,0.733333,0.733333,0.733333,1}"
		if (WaveExists(cell0))
			objectList += "cellOutline0;"
			Execute "AppendToGizmo Path="+GetWavesDataFolder(cell0,2)+",name=cellOutline0"
			Execute "ModifyGizmo ModifyObject=cellOutline0 property={ pathColorType,1}"
			Execute "ModifyGizmo ModifyObject=cellOutline0 property={ lineWidthType,1}"
			// Execute "ModifyGizmo ModifyObject=cellOutline0 property={ lineWidth,0.5}"
			Execute "ModifyGizmo ModifyObject=cellOutline0 property={ lineWidth,"+num2str(AtomView_BondLineWidth)+"}"
			Execute "ModifyGizmo ModifyObject=cellOutline0 property={ pathColor,0.733333,0.733333,0.733333,1}"
		endif
	endif

	if (WaveExists(corners))
		objectList += "AtomViewCubeCorners;"
		Execute "AppendToGizmo Scatter="+GetWavesDataFolder(corners,2)+",name=AtomViewCubeCorners"
		Execute "ModifyGizmo ModifyObject=AtomViewCubeCorners property={ scatterColorType,0}"
		Execute "ModifyGizmo ModifyObject=AtomViewCubeCorners property={ markerType,0}"
		Execute "ModifyGizmo ModifyObject=AtomViewCubeCorners property={ sizeType,0}"
		Execute "ModifyGizmo ModifyObject=AtomViewCubeCorners property={ rotationType,0}"
		Execute "ModifyGizmo ModifyObject=AtomViewCubeCorners property={ Shape,1}"
		Execute "ModifyGizmo ModifyObject=AtomViewCubeCorners property={ size,1}"
		Execute "ModifyGizmo ModifyObject=AtomViewCubeCorners property={ color,0,0,0,1}"
		Execute "ModifyGizmo userString={CubeCorners,\"AtomViewCubeCorners\"}"	// save name of cube corner object
	endif

	// ************************* Group Object Start *******************
	objectList += "groupAxisCue"
	Execute "AppendToGizmo group,name=groupAxisCue"
	Execute "ModifyGizmo currentGroupObject=\"groupAxisCue\""
	Execute "AppendToGizmo freeAxesCue={0,0,0,1},name=freeAxesCue0"
	Execute "AppendToGizmo attribute lineWidth=2, name=lineWidthCue"
	Execute "AppendToGizmo attribute specular={0,0,0,1,1032},name=specularOFF"
	Execute "AppendToGizmo attribute shininess={0,1032},name=shininessOFF"
	Execute "ModifyGizmo setDisplayList=0, attribute=lineWidthCue"
	Execute "ModifyGizmo setDisplayList=1, attribute=specularOFF"
	Execute "ModifyGizmo setDisplayList=1, attribute=shininessOFF"
	Execute "ModifyGizmo setDisplayList=2, object=freeAxesCue0"
	Execute "ModifyGizmo currentGroupObject=\"::\""
	// ************************* Group Object End *******************

	Execute "AppendToGizmo attribute blendFunc={770,771},name=blendingFunction"

	sprintf str,"{%g,%g,%g,1}",AtomView_GrayBkg,AtomView_GrayBkg,AtomView_GrayBkg
	Execute "ModifyGizmo setDisplayList=-1, opName=clearColor0, operation=clearColor, data="+str

	if (strlen(titleGroup))
		if (fixedLight)
			Execute "ModifyGizmo setDisplayList=-1, object=lightFixed"
		endif
		Execute "ModifyGizmo setDisplayList=-1, object="+titleGroup
		Execute "ModifyGizmo setDisplayList=-1, opName=MainTransform, operation=mainTransform"
	endif
	Execute "ModifyGizmo setDisplayList=-1, opName=orthoBase, operation=ortho, data={-2,2,-2,2,-3,3}"
	Execute "ModifyGizmo setDisplayList=-1, opName=scaleBase, operation=scale, data={1.25,1.25,1.25}"

	if (useBlend)
		Execute "ModifyGizmo setDisplayList=-1, attribute=blendingFunction"
		Execute "ModifyGizmo setDisplayList=-1, opName=enableBlend, operation=enable, data=3042"
	endif

	for (i=0;i<ItemsInList(attributeList);i+=1)
		Execute "ModifyGizmo setDisplayList=-1, attribute="+StringFromList(i,attributeList)
	endfor

	for (i=0;i<ItemsInList(objectList);i+=1)
		Execute "ModifyGizmo setDisplayList=-1, object="+StringFromList(i,objectList)
	endfor

	Execute "ModifyGizmo SETQUATERNION={0.398347,0.525683,0.596496,0.457349}"
	Execute "ModifyGizmo autoscaling=1"
	Execute "ModifyGizmo currentGroupObject=\"\""
	Execute "ModifyGizmo compile"
	//	Execute "ModifyGizmo showInfo"
	Execute "ModifyGizmo bringToFront"
	Execute "ModifyGizmo endRecMacro"
	return gizName
End









//  ============================================================================  //
//  =============================== Start Initialization  =============================== //

Function Init_AtomView()
	InitLatticeSymPackage()
	ElementDataInitPackage()
	InitGizmoZoomTranslate()
	return 0
End

//  ================================ End Initialization  =============================== //
//  ============================================================================  //

